<?xml version="1.0" encoding="ISO-8859-1"?>
<sequence>
<fluidics><valve_protocol>Wash 1</valve_protocol><valve_protocol>Wash 2</valve_protocol></fluidics>
<movie>
      <name>bleach_0_0</name>
      <length>20</length>
      <lock_target>0.0</lock_target>
      <progression>
	<type>lockedout</type>
      </progression>
    <delay>0</delay><pause>1</pause><stage_x>-41.55</stage_x><stage_y>-141.29</stage_y></movie>
<movie>
      <name>movie1_0_0</name>
      <length>200</length>
      <progression>
	<type>linear</type>
	<channel start="1.0">1</channel>
	<channel frames="100" inc="0.1" start="0.1">2</channel>
	<channel frames="100" inc="0.1" start="0.1">3</channel>
      </progression>
    <delay>200</delay><pause>0</pause><stage_x>-41.55</stage_x><stage_y>-141.29</stage_y></movie>

<fluidics><valve_protocol>Wash 1</valve_protocol><valve_protocol>Wash 2</valve_protocol></fluidics>
<movie>
      <name>bleach_0_1</name>
      <length>20</length>
      <lock_target>0.0</lock_target>
      <progression>
	<type>lockedout</type>
      </progression>
    <delay>811</delay><pause>0</pause><stage_x>576.92</stage_x><stage_y>-208.81</stage_y></movie>

<movie>
      <name>movie1_0_1</name>
      <length>200</length>
      <progression>
	<type>linear</type>
	<channel start="1.0">1</channel>
	<channel frames="100" inc="0.1" start="0.1">2</channel>
	<channel frames="100" inc="0.1" start="0.1">3</channel>
      </progression>
    <delay>200</delay><pause>0</pause><stage_x>576.92</stage_x><stage_y>-208.81</stage_y></movie>

<fluidics><valve_protocol>Wash 1</valve_protocol><valve_protocol>Wash 2</valve_protocol></fluidics>
<movie>
      <name>bleach_0_2</name>
      <length>20</length>
      <lock_target>0.0</lock_target>
      <progression>
	<type>lockedout</type>
      </progression>
    <delay>819</delay><pause>0</pause><stage_x>1213.4</stage_x><stage_y>-262.49</stage_y></movie>

<movie>
      <name>movie1_0_2</name>
      <length>200</length>
      <progression>
	<type>linear</type>
	<channel start="1.0">1</channel>
	<channel frames="100" inc="0.1" start="0.1">2</channel>
	<channel frames="100" inc="0.1" start="0.1">3</channel>
      </progression>
    <delay>200</delay><pause>0</pause><stage_x>1213.4</stage_x><stage_y>-262.49</stage_y></movie>

<fluidics><valve_protocol>Wash 1</valve_protocol><valve_protocol>Wash 2</valve_protocol></fluidics>
<movie>
      <name>bleach_0_3</name>
      <length>20</length>
      <lock_target>0.0</lock_target>
      <progression>
	<type>lockedout</type>
      </progression>
    <delay>819</delay><pause>0</pause><stage_x>1850.93</stage_x><stage_y>-304.74</stage_y></movie>

<movie>
      <name>movie1_0_3</name>
      <length>200</length>
      <progression>
	<type>linear</type>
	<channel start="1.0">1</channel>
	<channel frames="100" inc="0.1" start="0.1">2</channel>
	<channel frames="100" inc="0.1" start="0.1">3</channel>
      </progression>
    <delay>200</delay><pause>0</pause><stage_x>1850.93</stage_x><stage_y>-304.74</stage_y></movie>

<fluidics><valve_protocol>Wash 1</valve_protocol><valve_protocol>Wash 2</valve_protocol></fluidics>
<movie>
      <name>bleach_0_4</name>
      <length>20</length>
      <lock_target>0.0</lock_target>
      <progression>
	<type>lockedout</type>
      </progression>
    <delay>818</delay><pause>0</pause><stage_x>2486.37</stage_x><stage_y>-341.79</stage_y></movie>

<movie>
      <name>movie1_0_4</name>
      <length>200</length>
      <progression>
	<type>linear</type>
	<channel start="1.0">1</channel>
	<channel frames="100" inc="0.1" start="0.1">2</channel>
	<channel frames="100" inc="0.1" start="0.1">3</channel>
      </progression>
    <delay>200</delay><pause>0</pause><stage_x>2486.37</stage_x><stage_y>-341.79</stage_y></movie>

<fluidics><valve_protocol>Wash 1</valve_protocol><valve_protocol>Wash 2</valve_protocol></fluidics>
<movie>
      <name>bleach_0_5</name>
      <length>20</length>
      <lock_target>0.0</lock_target>
      <progression>
	<type>lockedout</type>
      </progression>
    <delay>817</delay><pause>0</pause><stage_x>3121.82</stage_x><stage_y>-367.41</stage_y></movie>

<movie>
      <name>movie1_0_5</name>
      <length>200</length>
      <progression>
	<type>linear</type>
	<channel start="1.0">1</channel>
	<channel frames="100" inc="0.1" start="0.1">2</channel>
	<channel frames="100" inc="0.1" start="0.1">3</channel>
      </progression>
    <delay>200</delay><pause>0</pause><stage_x>3121.82</stage_x><stage_y>-367.41</stage_y></movie>

<fluidics><valve_protocol>Wash 1</valve_protocol><valve_protocol>Wash 2</valve_protocol></fluidics>
<movie>
      <name>bleach_0_6</name>
      <length>20</length>
      <lock_target>0.0</lock_target>
      <progression>
	<type>lockedout</type>
      </progression>
    <delay>816</delay><pause>0</pause><stage_x>3755.53</stage_x><stage_y>-382.31</stage_y></movie>

<movie>
      <name>movie1_0_6</name>
      <length>200</length>
      <progression>
	<type>linear</type>
	<channel start="1.0">1</channel>
	<channel frames="100" inc="0.1" start="0.1">2</channel>
	<channel frames="100" inc="0.1" start="0.1">3</channel>
      </progression>
    <delay>200</delay><pause>0</pause><stage_x>3755.53</stage_x><stage_y>-382.31</stage_y></movie>

<fluidics><valve_protocol>Wash 1</valve_protocol><valve_protocol>Wash 2</valve_protocol></fluidics>
<movie>
      <name>bleach_0_7</name>
      <length>20</length>
      <lock_target>0.0</lock_target>
      <progression>
	<type>lockedout</type>
      </progression>
    <delay>817</delay><pause>0</pause><stage_x>4389.93</stage_x><stage_y>-387.5</stage_y></movie>

<movie>
      <name>movie1_0_7</name>
      <length>200</length>
      <progression>
	<type>linear</type>
	<channel start="1.0">1</channel>
	<channel frames="100" inc="0.1" start="0.1">2</channel>
	<channel frames="100" inc="0.1" start="0.1">3</channel>
      </progression>
    <delay>200</delay><pause>0</pause><stage_x>4389.93</stage_x><stage_y>-387.5</stage_y></movie>

<fluidics><valve_protocol>Wash 1</valve_protocol><valve_protocol>Wash 2</valve_protocol></fluidics>
<movie>
      <name>bleach_0_8</name>
      <length>20</length>
      <lock_target>0.0</lock_target>
      <progression>
	<type>lockedout</type>
      </progression>
    <delay>817</delay><pause>0</pause><stage_x>5024.69</stage_x><stage_y>-383.34</stage_y></movie>

<movie>
      <name>movie1_0_8</name>
      <length>200</length>
      <progression>
	<type>linear</type>
	<channel start="1.0">1</channel>
	<channel frames="100" inc="0.1" start="0.1">2</channel>
	<channel frames="100" inc="0.1" start="0.1">3</channel>
      </progression>
    <delay>200</delay><pause>0</pause><stage_x>5024.69</stage_x><stage_y>-383.34</stage_y></movie>

</sequence>
