<?xml version="1.0" encoding="ISO-8859-1"?>
<recipe>

<command_sequence><junk></junk>
  <loop name = "Valve Loop">
    <variable_entry name = "Valve Loop"></variable_entry>
    <loop name = "Movie Loop" variable_name = "j">	
 	<item name = "Movie 1"></item>
	<item name = "Movie 2"></item>
        <item name = "Movie 3"></item>
    </loop>
  </loop>
</command_sequence>

<item name = "Movie 1">
	<movie>
		<name>bleach</name>
		<length>20</length>
		<lock_target>0.0</lock_target>
		<progression><type>lockedout</type></progression>
		<variable_entry name = "Movie Loop"></variable_entry>
	</movie>
</item>

<item name = "Movie 2">
  <movie>
    <name>405</name>
    <length>20</length>
    <lock_target>0.0</lock_target>
    <progression><type>lockedout</type></progression>
    <variable_entry name = "Movie Loop"></variable_entry>
  </movie>
</item>

<item name = "Movie 3">
  <movie>
    <name>647</name>
    <length>20</length>
    <lock_target>0.0</lock_target>
    <progression><type>lockedout</type></progression>
    <variable_entry name = "Movie Loop"></variable_entry>
  </movie>
</item>

<loop_variable name = "Valve Loop">
  <value><valve_protocol>Hybridize 1</valve_protocol></value>
  <value><valve_protocol>Hybridize 2</valve_protocol></value>
  <value><valve_protocol>Hybridize 3</valve_protocol></value>
  <value><valve_protocol>Hybridize 4</valve_protocol></value>
  <value><valve_protocol>Hybridize 5</valve_protocol></value>
</loop_variable>

<loop_variable name = "Movie Loop">
   <file_path>stage_position_example.xml</file_path>
</loop_variable>

</recipe>
