<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>
  <!-- Default kilroy settings -->

  <!-- COM port of serial connection to valves -->
  <com_port type="int">2</com_port>	  

  <!-- TCP/IP port for local communication with Dave -->
  <tcp_port type="int">9500</tcp_port>

  <!-- Number of valves to simulate (Defaults to 0) -->
  <num_simulated_valves type="int">2</num_simulated_valves>

  <!-- Sets verbosity of kilroy and the classes it owns. Useful for debug -->
  <verbose type="boolean">True</verbose>

  <!-- Define location of valve commands and protocols -->
  <valve_protocols_file type = "">default_config.xml</valve_protocols_file>
  <valve_commands_file type = "">default_config.xml</valve_commands_file>

</settings>
