<?xml version="1.0" encoding="ISO-8859-1"?>
<hardware>
  <!-- Defines all the hardware.
       
       Note that if you don't have a particular piece of hardware
       it needs to be commented out in this file.
    -->

  <camera>
    <!-- <module type="string">detachedSingleCamera</module> -->
    <module type="string">classicSingleCamera</module>
    <!-- <module type="string">noneCamera</module> -->
    <parameters>
      <control type="string">noneCameraControl</control>
      <display type="string">noneCameraWidget</display>
    </parameters>
  </camera>

  <modules>

    <!-- The focus lock -->
    <!--
    <focuslock>
      <class_name type="string">AFocusLockZ</class_name>
      <menu_item type="string">Focus Lock</menu_item>
      <module_name type="string">focuslock.noneFocusLockZ</module_name>
    </focuslock>
    -->

    <!-- Illumination (lasers, shutters, etc) control -->
    <!--
    <illumination>
      <class_name type="string">AIlluminationControl</class_name>
      <menu_item type="string">Illumination</menu_item>
      <module_name type="string">illumination.noneIlluminationControl</module_name>
    </illumination>
    -->

    <!-- Automatic illumination power adjustment -->
    <!--
    <progressions>
      <class_name type="string">ProgressionControl</class_name>
      <menu_item type="string">Progressions</menu_item>
      <module_name type="string">progressionControl</module_name>
    </progressions>
    -->

    <!-- The live STORM analysis and display -->
    <!--
    <spotcounter>
      <class_name type="string">SpotCounter</class_name>
      <menu_item type="string">Spot Counter</menu_item>
      <module_name type="string">spotCounter</module_name>
    </spotcounter>
    -->

    <!-- Motorized XY stage -->
    <!--
    <stage>
      <class_name type="string">AStageControl</class_name>
      <menu_item type="string">Stage Control</menu_item>
      <module_name type="string">stagecontrol.noneStageControl</module_name>
    </stage>
    -->

    <!-- Remote control of HAL via TCP/IP -->
    <tcpip>
      <class_name type="string">TCPControl</class_name>
      <module_name type="string">tcpControl</module_name>
      <parameters>
	<tcp_port type="int">9000</tcp_port>
      </parameters>
    </tcpip>

  </modules>
  
</hardware>
