<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>
  <setup_name type="string">none</setup_name>

  <!-- default film settings -->
  <film>
    <want_big_endian type="boolean">False</want_big_endian>
    <directory type="directory">C:\Data\</directory>
    <filename type="string">movie</filename>
    <acq_mode type="string" values="run_till_abort,fixed_length">fixed_length</acq_mode>
    <frames type="int" min="1" max="1000000000">10</frames>
    <logfile type="filename" mutable="False">C:\Data\logs\image_log.txt</logfile>
    <extension type="string" values=",Red,Green,Blue"></extension>
    <auto_increment type="boolean">True</auto_increment>
    <want_bell type="boolean">True</want_bell>
    <auto_shutters type="boolean">True</auto_shutters>
    <filetype type="string" values=".dax">.dax</filetype>
  </film>
  
  <!-- default settings for steve -->
  <mosaic>
    <objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
    <flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
    <flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
    <transpose desc="Transpose image (mosaic)" type="boolean">True</transpose>
    <obj1 type="custom">100x,100.0,0.0,0.0</obj1>
    <obj2 type="custom">10x,10.0,0.0,0.0</obj2>
    <obj3 type="custom">4x,4.0,0.0,0.0</obj3>
    <pixels_to_um type="float">0.160</pixels_to_um>
  </mosaic>

</settings>
