<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>
  <!-- general -->
  <use_as_default type="int">1</use_as_default>

  <!-- camera settings -->
  <camera1>
    <reversed_shutter desc="Shutter response is backwards" type="boolean">False</reversed_shutter>
    <flip_horizontal desc="Flip image horizontal" type="boolean">False</flip_horizontal>
    <flip_vertical desc="Flip image vertical" type="boolean">False</flip_vertical>
    <transpose desc="Transpose image" type="boolean">False</transpose>
  </camera1>

  <!-- film settings -->
  <film>
    <want_big_endian type="boolean">False</want_big_endian>
    <directory type="string">C:\Data\</directory>
    <filename type="string">movie</filename>
    <acq_mode type="string" values="run_till_abort,fixed_length">fixed_length</acq_mode>
    <frames type="int" min="1" max="1000000000">10</frames>
    <logfile type="string">C:\Data\image_log.txt</logfile>
    <extension type="string" values=",A647,Cy5,Cy3,Cy2,A405,FITC,YFP,GFP,BF"></extension>
    <auto_increment type="boolean">True</auto_increment>
    <want_bell type="boolean">True</want_bell>
    <auto_shutters type="boolean">True</auto_shutters>
    <filetype type="string" values=".dax">.dax</filetype>
  </film>

  <!-- illumination settings -->
  <!--
  <illumination>
    <shutters type="string">shutters_default.xml</shutters>
    <default_power channel="0">1.0</default_power>
    <default_power channel="1">1.0</default_power>
    <default_power channel="2">1.0</default_power>
    <default_power channel="3">1.0</default_power>
    <default_power channel="4">1.0</default_power>
    <default_power channel="5">1.0</default_power>
    <default_power channel="6">1.0</default_power>
    <button channel="0" power="1.0">Max</button>
    <button channel="0" power="0.1">Low</button>
    <button channel="1" power="1.0">Max</button>
    <button channel="1" power="0.1">Low</button>
    <button channel="2" power="1.0">Max</button>
    <button channel="2" power="0.1">Low</button>
    <button channel="3" power="1.0">Max</button>
    <button channel="3" power="0.1">Low</button>
    <button channel="4" power="1.0">Max</button>
    <button channel="4" power="0.1">Low</button>
    <button channel="5" power="1.0">Max</button>
    <button channel="5" power="0.1">Low</button>
    <button channel="6" power="1.0">Max</button>
    <button channel="6" power="0.1">Low</button>
  </illumination>
  -->

  <!-- stage settings -->
  <!--
  <stage>
    <small_step_size type="float">5.0</small_step_size>
    <large_step_size type="float">25.0</large_step_size>
    <x_sign type="int">1</x_sign>
    <y_sign type="int">1</y_sign>
    <flip_axis type="int">1</flip_axis>
    <stage_speed type="float">5.0</stage_speed>
    <drag_multiplier type="float">0.16</drag_multiplier>
  </stage>
  -->

  <!-- focus lock settings -->
  <!--
  <focuslock>
    <ir_power type="int">6</ir_power>
    <qpd_mode type="int">0</qpd_mode>
    <qpd_zcenter type="float">50.0</qpd_zcenter>
    <qpd_scale type="float">50.0</qpd_scale>
    <qpd_sum_max type="int">256</qpd_sum_max>
    <cal_deadtime type="int">20</cal_deadtime>
    <cal_range type="float">600</cal_range>
    <cal_step_size type="float">10</cal_step_size>
    <cal_frames_to_pause type="int">2</cal_frames_to_pause>
    <zscan_step type="float">0.1</zscan_step>
    <zscan_frames_to_pause type="int">10</zscan_frames_to_pause>
    <zscan_stop type="float">1.0</zscan_stop>
    <olock_bracket_step type="int">1000</olock_bracket_step>
    <olock_scan_step type="int">100</olock_scan_step>
    <olock_scan_hold type="int">10</olock_scan_hold>
    <olock_quality_threshold type="float">0.0</olock_quality_threshold>
	<is_locked_buffer_length type="int">10</is_locked_buffer_length>
    <is_locked_offset_thresh type="float">0.01</is_locked_offset_thresh>
  </focuslock>
  -->

  <!-- spot counter -->
  <!--
  <spotcounter>
    <have_spot_counter type="int">1</have_spot_counter>
    <cell_size type="int">32</cell_size>
    <threshold type="int">250</threshold>
    <min_spots type="int">0</min_spots>
    <max_spots type="int">500</max_spots>
    <scale_bar_len type="float">1000</scale_bar_len>
    <nm_per_pixel type="float">164</nm_per_pixel>
  </spotcounter>
  -->

  <!-- misc control -->
  <!--
  <misc>
    <jog_size type="float">0.01</jog_size>
    <epi_position type="float">17.92</epi_position>
    <tirf_position type="float">20.36</tirf_position>
    <filter_names type="string-array">1,2,3,4,5,6</filter_names>
    <filter_position type="int">0</filter_position>
  </misc>
  -->

  <!-- power progression settings -->
  <!--
  <progressions>
    <have_progressions type="int">1</have_progressions>
    <use_progressions type="int">0</use_progressions>
    <pstart_value type="float">0.1</pstart_value>
    <pinc_value type="float">0.01</pinc_value>
    <pframe_value type="int">1000</pframe_value>
  </progressions>
  -->

  <!-- steve settings -->
  <mosaic>
    <objective type="string">obj1</objective>
    <flip_horizontal type="int">1</flip_horizontal>
    <flip_vertical type="int">1</flip_vertical>
    <transpose type="int">1</transpose>
    <obj1 type="string">100x,100.0,0.0,0.0</obj1>
    <obj2 type="string">10x,10.0,227.0,-69.0</obj2>
    <obj3 type="string">2x,2.0,133.0,-244.0</obj3>
    <pixels_to_um type="float">0.160</pixels_to_um>
  </mosaic>

</settings>
