<?xml version="1.0" encoding="ISO-8859-1"?>
<hardware>
  <!-- Defines all the hardware (for storm4pi).
       
       Note that if you don't have a particular piece of hardware
       it needs to be commented out in this file.
    -->

  <camera>
    <module type="string">dualCamera</module>
    <parameters>
      <control type="string">andordualCameraControl</control>
      <display type="string">andorCameraWidget</display>
    </parameters>
  </camera>

  <modules>

    <!-- The focus lock -->
    <focuslock>
      <class_name type="string">AFocusLockZ</class_name>
      <menu_item type="string">Focus Lock</menu_item>
      <module_name type="string">focuslock.storm4piFocusLockZ</module_name>
    </focuslock>

    <!-- Illumination (lasers, shutters, etc) control. -->
    <illumination>
      <class_name type="string">IlluminationControl</class_name>
      <menu_item type="string">Illumination</menu_item>
      <module_name type="string">illumination.illuminationControl</module_name>
      <parameters>
	<settings_xml type="string">storm4_illumination_settings.xml</settings_xml>
      </parameters>
    </illumination>

    <!-- Automatic illumination power adjustment. -->
    <progressions>
      <class_name type="string">ProgressionControl</class_name>
      <menu_item type="string">Progressions</menu_item>
      <module_name type="string">progressionControl</module_name>
    </progressions>

    <!-- The live STORM analysis and display. -->
    <spotcounter>
      <class_name type="string">DualSpotCounter</class_name>
      <menu_item type="string">Spot Counter</menu_item>
      <module_name type="string">spotCounter</module_name>
    </spotcounter>

  </modules>

</hardware>
