<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>
  <camera1 validate="True">
    <adchannel type="int">0</adchannel>
    <baselineclamp type="boolean">True</baselineclamp>
    <default_max type="int">2000</default_max>
    <default_min type="int">100</default_min>
    <emccd_advanced type="boolean">False</emccd_advanced>
    <emccd_gain type="int">30</emccd_gain>
    <emgainmode type="int">2</emgainmode>
    <exposure_time type="float">0.004670000169426203</exposure_time>
    <extension type="string"/>
    <external_trigger type="boolean">False</external_trigger>
    <flip_horizontal type="boolean">False</flip_horizontal>
    <flip_vertical type="boolean">False</flip_vertical>
    <fps type="float">202.4291540169084</fps>
    <frame_transfer_mode type="int">1</frame_transfer_mode>
    <head_model type="string">DU897_BV</head_model>
    <hsspeed type="float">17.0</hsspeed>
    <isolated_cropmode type="boolean">False</isolated_cropmode>
    <kinetic_cycle_time type="float">0.0</kinetic_cycle_time>
    <low_during_filming type="boolean">False</low_during_filming>
    <off_during_filming type="boolean">False</off_during_filming>
    <preampgain type="float">3.0</preampgain>
    <saved type="boolean">True</saved>
    <temperature type="int">-70</temperature>
    <transpose type="boolean">False</transpose>
    <vsamplitude type="int">0</vsamplitude>
    <vsspeed type="float">0.5</vsspeed>
    <x_bin type="int">1</x_bin>
    <x_end type="int">287</x_end>
    <x_pixels type="int">64</x_pixels>
    <x_start type="int">224</x_start>
    <y_bin type="int">1</y_bin>
    <y_end type="int">287</y_end>
    <y_pixels type="int">64</y_pixels>
    <y_start type="int">224</y_start>
  </camera1>
  <display00 validate="False">
    <camera1 validate="True">
      <center_x type="float">260.0</center_x>
      <center_y type="float">259.0</center_y>
      <colortable type="string">ramp.ctbl</colortable>
      <display_max type="int">4894</display_max>
      <display_min type="int">0</display_min>
      <initialized type="boolean">True</initialized>
      <scale type="int">5</scale>
      <sync type="int">0</sync>
    </camera1>
    <feed_name type="string">camera1</feed_name>
  </display00>
  <film validate="False">
    <acq_mode type="string">run_till_abort</acq_mode>
    <auto_increment type="boolean">True</auto_increment>
    <auto_shutters type="boolean">True</auto_shutters>
    <extension type="string"/>
    <filename type="string">movie</filename>
    <filetype type="string">.dax</filetype>
    <frames type="int">100</frames>
    <want_bell type="boolean">True</want_bell>
  </film>
  <focuslock validate="True">
    <calibrate validate="True">
      <deadtime type="int">20</deadtime>
      <frames_to_pause type="int">2</frames_to_pause>
      <range type="float">600.0</range>
      <step_size type="float">10.0</step_size>
    </calibrate>
    <find_sum validate="True">
      <step_size type="float">1.0</step_size>
    </find_sum>
    <jump_size type="float">0.1</jump_size>
    <locked validate="True">
      <buffer_length type="int">5</buffer_length>
      <lock_gain type="float">0.5</lock_gain>
      <lock_gain_max type="float">0.7</lock_gain_max>
      <minimum_sum type="float">-1.0</minimum_sum>
      <offset_threshold type="float">20.0</offset_threshold>
    </locked>
    <optimal_mode validate="True">
      <bracket_step type="float">1000.0</bracket_step>
      <quality_threshold type="float">0.0</quality_threshold>
      <scan_hold type="int">10</scan_hold>
      <scan_step type="float">100.0</scan_step>
    </optimal_mode>
    <scan validate="True">
      <minimum_sum type="float">-1.0</minimum_sum>
      <offset_threshold type="float">100.0</offset_threshold>
      <scan_range type="float">10.0</scan_range>
      <scan_step type="float">0.05</scan_step>
    </scan>
  </focuslock>
  <illumination validate="True">
    <default_power type="custom">0.000,0.000,0.000,0.000</default_power>
    <on_off_state type="custom">False,False,False,False</on_off_state>
    <power_buttons type="custom">[[['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]], [['Max', 1.0], ['Low', 0.1]]]</power_buttons>
    <shutters type="string">C:\Users\Josh\Aaron\storm-control\storm_control\hal4000\shutters_default.xml</shutters>
  </illumination>
  <mosaic validate="False">
    <flip_horizontal type="boolean">False</flip_horizontal>
    <flip_vertical type="boolean">False</flip_vertical>
    <obj1 type="custom">60x,0.120,0.0,0.0</obj1>
    <obj2 type="custom">10x,1.60,0.0,0.0</obj2>
    <obj3 type="custom">4x,4.0,0.0,0.0</obj3>
    <objective type="string">obj1</objective>
    <transpose type="boolean">False</transpose>
  </mosaic>
  <progressions validate="True">
    <pfile_name type="string"/>
    <use_progressions type="boolean">False</use_progressions>
  </progressions>
  <spotcounter validate="True">
    <scale_bar_len type="float">2000.0</scale_bar_len>
    <threshold type="int">250</threshold>
  </spotcounter>
  <stage validate="True">
    <large_step_size type="float">25.0</large_step_size>
    <small_step_size type="float">5.0</small_step_size>
  </stage>
  <timing validate="True">
    <time_base type="string">camera1</time_base>
  </timing>
</settings>
