<?xml version="1.0" encoding="ISO-8859-1"?>
<kilroy_configuration num_valves = "4" num_pumps = "1">
	<valve_commands>
		<valve_cmd name = "Stop Valve">
			<valve_pos valve_ID = "1" port_ID = "1"></valve_pos>
		</valve_cmd>
		<valve_cmd name = "Flow Hybridization">
			<valve_pos valve_ID = "1" port_ID = "2"></valve_pos>
		</valve_cmd>
		<valve_cmd name = "Flow Wash">
			<valve_pos valve_ID = "1" port_ID = "3"></valve_pos>
		</valve_cmd>
		<valve_cmd name = "Flow STORM Buffer">
			<valve_pos valve_ID = "1" port_ID = "4"></valve_pos>
		</valve_cmd>
		<valve_cmd name = "Set Hyb 1">
			<valve_pos valve_ID = "2" port_ID = "1"></valve_pos>
		</valve_cmd>
		<valve_cmd name = "Set Hyb 2">
			<valve_pos valve_ID = "2" port_ID = "2"></valve_pos>
		</valve_cmd>
		<valve_cmd name = "Set Hyb 3">
			<valve_pos valve_ID = "2" port_ID = "3"></valve_pos>
		</valve_cmd>
		<valve_cmd name = "Set Hyb 4">
			<valve_pos valve_ID = "2" port_ID = "4"></valve_pos>
		</valve_cmd>
	</valve_commands>

	<pump_commands type="syringe">
		 <pump_cmd name = "Pull 5 mL">
			<pump_config speed = "1.0" volume="5.0" port_name="Pull"></pump_config>
		 </pump_cmd>
		 <pump_cmd name = "Exhaust">
			<pump_config speed = "5.0" volume="0.0" port_name="Exhaust"></pump_config>
		 </pump_cmd>
	</pump_commands>
</kilroy_configuration>