<?xml version="1.0" encoding="ISO-8859-1"?>
<illumination_settings>

  <control_modules>
    <control_module>
      <name>wheel1</name>
      <module_name>storm_control.sc_hardware.none.filterWheel</module_name>
      <class_name>NoneFilterWheel</class_name>
    </control_module>

    <control_module>
      <name>aotf1</name>
      <module_name>storm_control.sc_hardware.none.aotf</module_name>
      <class_name>NoneAOTF</class_name>
    </control_module>
    
    <control_module>
      <name>laser1</name>
      <module_name>storm_control.sc_hardware.none.laser</module_name>
      <class_name>NoneLaser</class_name>
    </control_module>

    <control_module>
      <name>daq1</name>
      <module_name>storm_control.sc_hardware.none.daq</module_name>
      <class_name>NoneDaq</class_name>
    </control_module>
  </control_modules>
  
  <channels>
    <channel>
      <description>750</description>
      <color type="rgb">200,0,0</color>
      
      <amplitude_modulation>
	<uses>wheel1</uses>
	<display_normalized type="boolean">False</display_normalized>
	<parameters>
	  <minimum type="int">1</minimum>
	  <maximum type="int">6</maximum>
	</parameters>
      </amplitude_modulation>
      
      <digital_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">0</channel>
	</parameters>
      </digital_modulation>
    </channel>
    
    <channel>
      <description>642</description>
      <color type="rgb">255,0,0</color>
      
      <amplitude_modulation>
	<uses>aotf1</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <maximum type="int">1000</maximum>
	  <channel type="int">0</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">30.0</on_frequency>
	</parameters>
      </amplitude_modulation>
      
      <analog_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">1</channel>
	  <max_voltage type="float">1.0</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
      </parameters>
      </analog_modulation>
      
      <digital_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">1</channel>
	</parameters>
      </digital_modulation>
    </channel>

    <channel>
      <description>561</description>
      <color type="rgb">255,255,0</color>

      <amplitude_modulation>
	<uses>aotf1</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <maximum type="int">1000</maximum>
	  <channel type="int">1</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">30.0</on_frequency>
	</parameters>
      </amplitude_modulation>
      
      <digital_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">2</channel>
	</parameters>
      </digital_modulation>
    </channel>

    <channel>
      <description>532</description>
      <color type="rgb">0,255,0</color>

      <amplitude_modulation>
	<uses>aotf1</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <maximum type="int">1000</maximum>
	  <channel type="int">1</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">30.0</on_frequency>
	</parameters>
      </amplitude_modulation>
      
      <mechanical_shutter>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">3</channel>
	</parameters>
      </mechanical_shutter>
    </channel>

    <channel>
      <description>488</description>
      <color type="rgb">0,100,255</color>
      
      <amplitude_modulation>
	<uses>aotf1</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <maximum type="int">1000</maximum>
	  <channel type="int">0</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">30.0</on_frequency>
	</parameters>
      </amplitude_modulation>
      
      <analog_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">1</channel>
	  <max_voltage type="float">1.0</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
      </parameters>
      </analog_modulation>
      
      <digital_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">1</channel>
	</parameters>
      </digital_modulation>
    </channel>

    <channel>
      <description>460</description>
      <color type="rgb">0,0,255</color>
      
      <amplitude_modulation>
	<uses>aotf1</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <maximum type="int">1000</maximum>
	  <channel type="int">0</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">30.0</on_frequency>
	</parameters>
      </amplitude_modulation>
      
      <analog_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">1</channel>
	  <max_voltage type="float">1.0</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
      </parameters>
      </analog_modulation>
      
      <digital_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">1</channel>
	</parameters>
      </digital_modulation>
    </channel>

    <channel>
      <description>405</description>
      <color type="rgb">255,0,255</color>
      
      <amplitude_modulation>
	<uses>aotf1</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <maximum type="int">1000</maximum>
	  <channel type="int">0</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">30.0</on_frequency>
	</parameters>
      </amplitude_modulation>
      
      <analog_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">1</channel>
	  <max_voltage type="float">1.0</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
      </parameters>
      </analog_modulation>
      
      <digital_modulation>
	<uses>daq1</uses>
	<parameters>
	  <board>none</board>
	  <channel type="int">1</channel>
	</parameters>
      </digital_modulation>
    </channel>

  </channels>

</illumination_settings>
