<?xml version="1.0" encoding="ISO-8859-1"?>
<illumination_settings>

  <control_modules>
    
    <control_module>
      <name>daq_amp</name>
      <module_name>sc_hardware.nationalInstruments.hNicontrol</module_name>
      <class_name>NidaqAmp</class_name>
    </control_module>

    <control_module>
      <name>daq</name>
      <module_name>sc_hardware.nationalInstruments.hNicontrol</module_name>
      <class_name>Nidaq</class_name>
      <parameters>
	<counter_board>PCI-6723</counter_board>
	<counter_id type="int">0</counter_id>
	<counter_trigger type="int">0</counter_trigger>
	<waveform_clock>ctr0out</waveform_clock>
      </parameters>
    </control_module>

  </control_modules>

  <channels>

    <!-- 647 laser -->
    <channel>
      <description>647</description>
      <color type="rgb">255,0,0</color>
      
      <amplitude_modulation>
	<uses>daq_amp</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">3</channel>
	  <max_voltage type="float">5.0</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
	</parameters>
      </amplitude_modulation>
      
      <analog_modulation>
	<uses>daq</uses>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">7</channel>
	  <max_voltage type="float">3.3</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
	</parameters>
      </analog_modulation>

      <mechanical_shutter>
	<uses>daq</uses>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">0</channel>
	</parameters>
      </mechanical_shutter>

    </channel>

    <!-- 561 laser -->
    <channel>
      <description>561</description>
      <color type="rgb">255,255,0</color>
      
      <amplitude_modulation>
	<uses>daq_amp</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">2</channel>
	  <max_voltage type="float">5.0</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
	</parameters>
      </amplitude_modulation>
      
      <analog_modulation>
	<uses>daq</uses>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">6</channel>
	  <max_voltage type="float">3.3</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
	</parameters>
      </analog_modulation>

      <mechanical_shutter>
	<uses>daq</uses>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">0</channel>
	</parameters>
      </mechanical_shutter>

    </channel>

    <!-- 488 laser -->
    <channel>
      <description>488</description>
      <color type="rgb">0,0,255</color>
      
      <amplitude_modulation>
	<uses>daq_amp</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">1</channel>
	  <max_voltage type="float">5.0</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
	</parameters>
      </amplitude_modulation>
      
      <analog_modulation>
	<uses>daq</uses>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">5</channel>
	  <max_voltage type="float">3.3</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
	</parameters>
      </analog_modulation>

      <mechanical_shutter>
	<uses>daq</uses>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">0</channel>
	</parameters>
      </mechanical_shutter>

    </channel>

    <!-- 405 laser -->
    <channel>
      <description>405</description>
      <color type="rgb">255,0,255</color>

      <amplitude_modulation>
	<uses>daq_amp</uses>
	<display_normalized type="boolean">True</display_normalized>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">0</channel>
	  <max_voltage type="float">5.0</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
	</parameters>
      </amplitude_modulation>
      
      <analog_modulation>
	<uses>daq</uses>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">4</channel>
	  <max_voltage type="float">3.3</max_voltage>
	  <min_voltage type="float">0.0</min_voltage>
	</parameters>
      </analog_modulation>

      <mechanical_shutter>
	<uses>daq</uses>
	<parameters>
	  <board>PCI-6723</board>
	  <channel type="int">0</channel>
	</parameters>
      </mechanical_shutter>

    </channel>

  </channels>

</illumination_settings>
