<?xml version="1.0" encoding="ISO-8859-1"?>
<hardware>

  <!-- The UI mode, this is either "single" (window) or "detached" -->
  <ui_mode type="string">single</ui_mode>

  <!-- Camera control. -->
  <control>
    <module_name type="string">hamamatsuCameraControl</module_name>
  </control>

  <!-- Camera display. -->
  <display>
    <module_name type="string">cameraWidgets</module_name>
    <class_name type="string">PyCameraWidget</class_name>
  </display>

  <!-- Define the other modules to use for this setup. -->
  <modules>

    <!-- Bluetooth communication -->
    <!--
    <bluetooth>
    
      <class_name type="string">HalBluetooth</class_name>
      <module_name type="string">halBluetooth</module_name>
      <parameters>
	<send_pictures type="int">1</send_pictures>
      </parameters>
    </bluetooth>
    -->

    <!-- Feed viewers -->
    <feedviewers>
      <class_name type="string">FeedViewers</class_name>
      <menu_item type="string">New Viewer</menu_item>
      <module_name type="string">display.feedViewer</module_name>
    </feedviewers>

    <!-- The focus lock -->    
    <focuslock>
      <class_name type="string">AFocusLockZ</class_name>
      <menu_item type="string">Focus Lock</menu_item>
      <module_name type="string">focuslock.hbaic1FocusLockZ</module_name>
    </focuslock>

    <!-- Illumination (lasers, shutters, etc) control. -->
    <illumination>
      <class_name type="string">IlluminationControl</class_name>
      <menu_item type="string">Illumination</menu_item>
      <module_name type="string">illumination.illuminationControl</module_name>
      <parameters>
	<settings_xml type="string">hbaic1_illumination_settings.xml</settings_xml>
      </parameters>
    </illumination>
   
    <!-- Joystick controller. -->
    <!--
    <joystick>
    
      <class_name type="string">AJoystick</class_name>
      <module_name type="string">joystick.gamepad310JoystickControl</module_name>
    </joystick>
    -->
	
    <!-- Control of miscellaneous hardware. -->
    <misc_control>
      <class_name type="string">AMiscControl</class_name>
      <menu_item type="string">Misc. Control</menu_item>
      <module_name type="string">miscControl.hbaic1MiscControl</module_name>
      <parameters>
	<port type="string">COM7</port>
	<baud_rate type="int">115200</baud_rate>
      </parameters>
    </misc_control>

    <!-- Automatic illumination power adjustment. -->
    <progressions>
      <class_name type="string">ProgressionControl</class_name>
      <menu_item type="string">Progressions</menu_item>
      <module_name type="string">progressionControl</module_name>
    </progressions>

    <!-- The live STORM analysis and display. -->
    <!--
    <spotcounter>
      <class_name type="string">SingleSpotCounter</class_name>
      <menu_item type="string">Spot Counter</menu_item>
      <module_name type="string">spotCounter</module_name>
    </spotcounter>
    -->
    
    <!-- Motorized XY stage. -->
    <stage>
      <class_name type="string">AStageControl</class_name>
      <menu_item type="string">Stage Control</menu_item>
      <module_name type="string">stagecontrol.hbaic1StageControl</module_name>
    </stage>

    <!-- Galvo control -->
    <galvo>
      <class_name type="string">GalvoControl</class_name>
      <menu_item type="string">Galvo Control</menu_item>
      <module_name type="string">miscControl.galvoControl</module_name>
    </galvo>
    
    <!-- Remote control of HAL via TCP/IP. -->

    <tcpip>
      <class_name type="string">HalTCPControl</class_name>
      <module_name type="string">halTcpControl</module_name>
      <parameters>
	<tcp_port type="int">9000</tcp_port>
      </parameters>
    </tcpip>

  </modules>

</hardware>
