<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">C:/Data/</directory>
  
  <!-- The setup name -->
  <setup_name type="string">jfocal</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">detached</ui_type>

  <!--
      This has two effects:
      
      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.
      
      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>
  
  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
      <class_name type="string">HalController</class_name>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

	<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
	<colortable type="string">ramp_sat.ctbl</colortable>
	
      </parameters>
    </display>
    
    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
	<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
	<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
	<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
	<transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

	<objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
	<obj1 desc="Objective 1" type="custom">100x,0.160,0.0,0.0</obj1>
	<obj2 desc="Objective 2" type="custom">10x,1.60,0.0,0.0</obj2>
	<obj3 desc="Objective 3" type="custom">4x,4.0,0.0,0.0</obj3>	
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the (software) time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
	<time_base type="string">camera1</time_base>
      </parameters>
    </timing>
  
    <!--
	Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
	Note that the cameras must have the names "camera1", "camera2", etc..
	
	Cameras are either "master" (they provide their own hardware timing)
	or "slave" they are timed by another camera. Each time the cameras
	are started the slave cameras are started first, then the master cameras.
	
	Also, "camera1" is assumed to be the master camera and many other modules
	(software) synchronize to this camera.
    -->

    <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
	<master type="boolean">True</master>
	<class_name type="string">AndorSDK3CameraControl</class_name>
	<module_name type="string">camera.andorSDK3CameraControl</module_name>
	<parameters>
	  
	  <!-- The location of the Andor DLL -->
	  <andor_sdk type="string">C:/Program Files/Andor SOLIS/</andor_sdk>

	  <!-- Which camera to use -->
	  <camera_id type="int">0</camera_id>

	  <!-- These are the display defaults, not the camera range. -->
	  <default_max type="int">500</default_max> 
	  <default_min type="int">0</default_min>
	  <flip_horizontal type="boolean">False</flip_horizontal>
	  <flip_vertical type="boolean">False</flip_vertical>
	  <transpose type="boolean">False</transpose>

	  <!-- These can be changed / editted. -->

	  <!-- This is the extension to use (if any) when saving data from this camera. -->
	  <extension type="string">c0</extension>
	  
	  <!-- Whether or not data from this camera is saved during filming. -->
	  <saved type="boolean">True</saved>

	</parameters>
      </camera>
    </camera1>

    <!-- 405 laser control -->
    <cube405>
      <module_name type="string">storm_control.sc_hardware.coherent.coherentModule</module_name>
      <class_name type="string">CoherentCube</class_name>

      <configuration>
	<port type="string">COM10</port>
	<used_during_filming type="bool">True</used_during_filming>
      </configuration>
    </cube405>

    <!-- DAQ control -->
    <daq>
      <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
      <class_name type="string">NidaqModule</class_name>

      <configuration>

	<!-- This is the default timing source to use while filming. "Oversampled"
	     films will use the counter for timing. The counter is driven by the
	     camera fire pin. Other films will just use the camera fire pin directly.
	-->
	<timing>
	  <camera_fire_pin type="string">/Dev1/PFI0</camera_fire_pin>
	  <counter type="string">/Dev1/ctr0</counter>
	  <counter_out type="string">/Dev1/PFI12</counter_out>
	</timing>

	<!-- These are the things that we provide DAQ functionality for.
	     Other modules will request them with a 'get functionality'
	     message and "name" = "daq.xxx.yyy". -->

	<ilm754>
	  <do_task>
	    <source type="string">/Dev1/port0/line0</source>
	    <used_during_filming type="bool">True</used_during_filming>
	  </do_task>
	</ilm754>

	<ilm656>
	  <do_task>
	    <source type="string">/Dev1/port0/line1</source>
	    <used_during_filming type="bool">True</used_during_filming>
	  </do_task>
	</ilm656>

	<ilm561>
	  <do_task>
	    <source type="string">/Dev1/port0/line2</source>
	    <used_during_filming type="bool">True</used_during_filming>
	  </do_task>
	</ilm561>

	<ilm488>
	  <do_task>
	    <source type="string">/Dev1/port0/line3</source>
	    <used_during_filming type="bool">True</used_during_filming>
	  </do_task>
	</ilm488>

	<ilm405>
	  <do_task>
	    <source type="string">/Dev1/port0/line4</source>
	    <used_during_filming type="bool">True</used_during_filming>
	  </do_task>
	</ilm405>	
      </configuration>
      
    </daq>

    <!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
      <class_name type="string">Illumination</class_name>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
      <configuration>

	<!-- Note: The name of the channel is the gui_name.
	     XML tags cannot start with numbers. -->
	<ch1>
	  <gui_name type="string">754</gui_name>
	  <color type="string">200,0,0</color>
	  <digital_modulation>
	    <hw_fn_name type="string">daq.ilm754.do_task</hw_fn_name>
	  </digital_modulation>
	</ch1>
	<ch2>
	  <gui_name type="string">656</gui_name>
	  <color type="string">255,0,0</color>
	  <digital_modulation>
	    <hw_fn_name type="string">daq.ilm656.do_task</hw_fn_name>
	  </digital_modulation>
	</ch2>
	<ch3>
	  <gui_name type="string">561</gui_name>
	  <color type="string">255,255,0</color>
	  <digital_modulation>
	    <hw_fn_name type="string">daq.ilm561.do_task</hw_fn_name>
	  </digital_modulation>
	</ch3>
	<ch4>
	  <gui_name type="string">488</gui_name>
	  <color type="string">0,255,255</color>
	  <digital_modulation>
	    <hw_fn_name type="string">daq.ilm488.do_task</hw_fn_name>
	  </digital_modulation>
	</ch4>
	<ch5>
	  <gui_name type="string">405</gui_name>
	  <color type="string">255,0,255</color>
	  
	  <amplitude_modulation>
	    <hw_fn_name>cube405</hw_fn_name>
	    <maximum type="int">5000</maximum>
	  </amplitude_modulation>
	  
	  <digital_modulation>
	    <hw_fn_name type="string">daq.ilm405.do_task</hw_fn_name>
	  </digital_modulation>
	</ch5>
      </configuration>
    </illumination>
    
    <!-- Bluetooth communication -->
    <!--
	This module handle Bluetooth communication with the HAL android app.
    -->
    <!--
    <bluetooth>
      <class_name type="string">HalBluetooth</class_name>
      <module_name type="string">halBluetooth</module_name>
      <parameters>
	<send_pictures type="int">1</send_pictures>
      </parameters>
    </bluetooth>
    -->

    <!-- The focus lock -->
    <!--
    <focuslock>
      <class_name type="string">AFocusLockZ</class_name>
      <menu_item type="string">Focus Lock</menu_item>
      <module_name type="string">focuslock.noneFocusLockZ</module_name>
      </focuslock>
    -->
    
    <!-- Automatic illumination power adjustment -->
    <!--
    <progressions>
      <class_name type="string">ProgressionControl</class_name>
      <menu_item type="string">Progressions</menu_item>
      <module_name type="string">progressionControl</module_name>
      </progressions>
      -->
    
    <!-- The live STORM analysis and display -->
    <!--
    <spotcounter>
      <class_name type="string">SingleSpotCounter</class_name>
      <menu_item type="string">Spot Counter</menu_item>
      <module_name type="string">spotCounter</module_name>
      </spotcounter>
      -->

    <!-- Motorized XY stage -->
    <!--
    <stage>
      <class_name type="string">AStageControl</class_name>
      <menu_item type="string">Stage Control</menu_item>
      <module_name type="string">stagecontrol.noneStageControl</module_name>
      </stage>
      -->

    <!-- Remote control of HAL via TCP/IP -->
    <!--
    <tcpip>
      <class_name type="string">HalTCPControl</class_name>
      <module_name type="string">halTcpControl</module_name>
      <parameters>
	<tcp_port type="int">9000</tcp_port>
      </parameters>
      </tcpip>
      -->

  </modules>
  
</config>
