<?xml version="1.0" encoding="ISO-8859-1"?>
<hardware>

  <!-- The UI mode, this is either "single" (window) or "detached" -->
  <ui_mode type="string">single</ui_mode>

  <!-- Camera control. -->
  <control>
    <module_name type="string">andorSDK3CameraControl</module_name>
  </control>

  <!-- Camera display. -->
  <display>
    <module_name type="string">cameraWidgets</module_name>
    <class_name type="string">PyCameraWidget</class_name>
  </display>

  <!-- Define the other modules to use for this setup. -->
  <modules>

    <!-- Bluetooth communication -->
    <!--
    <bluetooth>
      <class_name type="string">HalBluetooth</class_name>
      <module_name type="string">halBluetooth</module_name>
      <parameters>
	<send_pictures type="int">1</send_pictures>
      </parameters>
    </bluetooth>
    -->

    <!-- The focus lock -->
    <focuslock>
      <class_name type="string">AFocusLockZ</class_name>
      <menu_item type="string">Focus Lock</menu_item>
      <module_name type="string">focuslock.jfocalFocusLockZ</module_name>
    </focuslock>

    <!-- Illumination (lasers, shutters, etc) control. -->
    <illumination>
      <class_name type="string">IlluminationControl</class_name>
      <menu_item type="string">Illumination</menu_item>
      <module_name type="string">illumination.illuminationControl</module_name>
      <parameters>
	     <settings_xml type="string">jfocal_illumination_settings.xml</settings_xml>
      </parameters>
    </illumination>

    <!-- Joystick controller. -->
    <!--
    <joystick>
      <class_name type="string">AJoystick</class_name>
      <module_name type="string">joystick.gamepad310JoystickControl</module_name>
    </joystick>
    -->

    <!-- Control of miscellaneous hardware. -->
    <!--
    <misc_control>
      <class_name type="string">AMiscControl</class_name>
      <menu_item type="string">Misc. Control</menu_item>
      <module_name type="string">miscControl.storm3MiscControl</module_name>
    </misc_control>
    -->

    <!-- Automatic illumination power adjustment. -->
    <progressions>
      <class_name type="string">ProgressionControl</class_name>
      <menu_item type="string">Progressions</menu_item>
      <module_name type="string">progressionControl</module_name>
    </progressions>

    <!-- The live STORM analysis and display. -->
    <!--
    <spotcounter>
      <class_name type="string">SingleSpotCounter</class_name>
      <menu_item type="string">Spot Counter</menu_item>
      <module_name type="string">spotCounter</module_name>
    </spotcounter>
    -->

    <!-- Motorized XY stage. -->
    <stage>
      <class_name type="string">AStageControl</class_name>
      <menu_item type="string">Stage Control</menu_item>
      <module_name type="string">stagecontrol.jfocalStageControl</module_name>
    </stage>

    <!-- Remote control of HAL via TCP/IP. -->
    <tcpip>
      <class_name type="string">HalTCPControl</class_name>
      <module_name type="string">halTcpControl</module_name>
      <parameters>
	<tcp_port type="int">9000</tcp_port>
      </parameters>
    </tcpip>

	
	<!-- Add galvo control to Hal -->
    <galvo>
      <class_name type="string">GalvoControl</class_name>
      <menu_item type="string">Galvo Control</menu_item>
      <module_name type="string">miscControl.galvoControl</module_name>
    </galvo>
	
    <!-- Add spinning disk control -->
    <spinning_disk>
		<class_name type="string">SpinningDiskControl</class_name>
		<module_name type="string">miscControl.spinningDiskControl</module_name>
		<parameters>
			<com_port type="string">COM6</com_port>
			<verbose type="boolean">False</verbose>
			<filter_wheel_1 type="string">1:et595/50m,2:et690/50m,3:et780lp,4:zet405/488/561/647-656/752m,5:et525/50m,6:blocked,7:blocked,8:blocked,9:blocked,10:blocked</filter_wheel_1>
			<filter_wheel_2 type="string">1:empty,2:empty,3:blocked,4:blocked,5:blocked,6:blocked,7:blocked,8:blocked,9:blocked,10:blocked</filter_wheel_2>
			<dichroic_mirror type = "string">1:DMPT405/488/561/640/755,2:405/488/561/640,3:empty</dichroic_mirror>
			<camera_dichroic type = "string">1:Glass,2:100% Mirror,3:empty</camera_dichroic>
		</parameters>
    </spinning_disk>
	
	
  </modules>

</hardware>
