<?xml version="1.0" encoding="ISO-8859-1"?>
<config>

  <!-- The starting directory. -->
  <directory type="directory">C:/Data/</directory>
  
  <!-- The setup name -->
  <setup_name type="string">Scope1-Ham</setup_name>

  <!-- The ui type, this is 'classic' or 'detached' -->
  <ui_type type="string">classic</ui_type>

  <!--
      This has two effects:
      
      (1) If this is True any exception will immediately crash HAL, which can
      be useful for debugging. If it is False then some exceptions will be
      handled by the modules.
      
      (2) If it is False we also don't check whether messages are valid.
  -->
  <strict type="boolean">True</strict>
  
  <!--
      Define the modules to use for this setup.
  -->
  <modules>

    <!--
	This is the main window, you must have this.
    -->
    <hal>
      <module_name type="string">storm_control.hal4000.hal4000</module_name>
      <class_name type="string">HalController</class_name>
    </hal>

    <!--
	You also need all of these.
    -->

    <!-- Camera display. -->
    <display>
      <class_name type="string">Display</class_name>
      <module_name type="string">storm_control.hal4000.display.display</module_name>
      <parameters>

	<!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
	<colortable type="string">ramp.ctbl</colortable>
	
      </parameters>
    </display>
    
    <!-- Feeds. -->
    <feeds>
      <class_name type="string">Feeds</class_name>
      <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
    </feeds>

    <!-- Filming and starting/stopping the camera. -->
    <film>
      <class_name type="string">Film</class_name>
      <module_name type="string">storm_control.hal4000.film.film</module_name>

      <!-- Film parameters specific to this setup go here. -->
      <parameters>
	<extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
      </parameters>
    </film>

    <!-- Which objective is being used, etc. -->
    <mosaic>
      <class_name type="string">Mosaic</class_name>
      <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

      <!-- List objectives available on this setup here. -->
      <parameters>
	<flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
	<flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
	<transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

	<objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
	<obj1 desc="Objective 1" type="custom">60x,0.120,0.0,0.0</obj1>
	<obj2 desc="Objective 2" type="custom">10x,1.60,0.0,0.0</obj2>
	<obj3 desc="Objective 3" type="custom">4x,4.0,0.0,0.0</obj3>	
      </parameters>
    </mosaic>

    <!-- Loading, changing and editting settings/parameters -->
    <settings>
      <class_name type="string">Settings</class_name>
      <module_name type="string">storm_control.hal4000.settings.settings</module_name>
    </settings>

    <!-- Set the time base for films. -->
    <timing>
      <class_name type="string">Timing</class_name>
      <module_name type="string">storm_control.hal4000.timing.timing</module_name>
      <parameters>
	<time_base type="string">camera1</time_base>
      </parameters>
    </timing>
  
    <!--
	Everything else is optional, but you probably want at least one camera.
    -->

    <!-- Camera control. -->
    <!--
	Note that the cameras must have the names "camera1", "camera2", etc..
	
	Cameras are either "master" (they provide their own hardware timing)
	or "slave" they are timed by another camera. Each time the cameras
	are started the slave cameras are started first, then the master cameras.
    -->

    <camera1>
      <class_name type="string">Camera</class_name>
      <module_name type="string">storm_control.hal4000.camera.camera</module_name>
      <camera>
	<master type="boolean">True</master>
	<class_name type="string">HamamatsuCameraControl</class_name>
	<module_name type="string">storm_control.hal4000.camera.hamamatsuCameraControl</module_name>
	<parameters>

	  <!-- Which camera to use -->
	  <camera_id type="int">0</camera_id>

	  <!-- These are the display defaults, not the camera range. -->
	  <default_max type="int">2000</default_max> 
	  <default_min type="int">100</default_min>
	  <flip_horizontal type="boolean">False</flip_horizontal>
	  <flip_vertical type="boolean">False</flip_vertical>
	  <transpose type="boolean">False</transpose>

	  <!-- These can be changed / editted. -->

	  <!-- This is the extension to use (if any) when saving data from this camera. -->
	  <extension type="string">hcam</extension>
	  
	  <!-- Whether or not data from this camera is saved during filming. -->
	  <saved type="boolean">True</saved>

	</parameters>
      </camera>
    </camera1>    
	<!--AOTF -->
    <ctech_aotf>
      <module_name type="string">storm_control.sc_hardware.crystalTechnologies.aotfModule</module_name>
      <class_name type="string">AOTF64BitModule</class_name>
      <configuration>
	<use_fsk type="boolean">True</use_fsk>
	<fsk_mode type="int">1</fsk_mode>
	<python32_exe type="string">C:/Users/Josh/Anaconda3/envs/python32/python</python32_exe>

	<ch647>
	  <maximum type="int">3100</maximum>
	  <channel type="int">0</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">89.85</on_frequency>
	</ch647>

	<ch561>
	  <maximum type="int">3100</maximum>
	  <channel type="int">1</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">107.73</on_frequency>
	</ch561>

	<ch488>
	  <maximum type="int">3100</maximum>
	  <channel type="int">2</channel>
	  <off_frequency type="float">20.0</off_frequency>
	  <on_frequency type="float">129.41</on_frequency>
	</ch488>

      </configuration>
    </ctech_aotf>
    
    <!-- DAQ control -->
    <daq>
      <module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
      <class_name type="string">NidaqModule</class_name>

      <configuration>

	<!-- This is the default timing source to use while filming. "Oversampled"
	     films will use the counter for timing. The counter is driven by the
	     camera fire pin. Other films will just use the camera fire pin directly.
	-->
	<timing>
	  <camera_fire_pin type="string">/Dev1/PFI0</camera_fire_pin>
	  <counter type="string">/Dev1/ctr0</counter>
	  <counter_out type="string">/Dev1/PFI12</counter_out>
	</timing>

	<!-- These are the things that we provide DAQ functionality for.
	     Other modules will request them with a 'get functionality'
	     message and "name" = "daq.xxx.yyy". -->

	<ilm647>
	  <ao_task>
	    <source type="string">/Dev1/ao0</source>
	  </ao_task>
	  <do_task>
	    <source type="string">/Dev1/port0/line0</source>
	  </do_task>
	</ilm647>

	<ilm561>
	  <ao_task>
	    <source type="string">/Dev1/ao1</source>
	  </ao_task>
	  <do_task>
	    <source type="string">/Dev1/port0/line1</source>
	  </do_task>
	</ilm561>

	<ilm488>
	  <ao_task>
	    <source type="string">/Dev1/ao2</source>
	  </ao_task>
	  <do_task>
	    <source type="string">/Dev1/port0/line2</source>
	  </do_task>
	</ilm488>

	<ilm405>
	  <ao_task>
	    <source type="string">/Dev1/ao3</source>
	  </ao_task>
	  <do_task>
	    <source type="string">/Dev1/port0/line3</source>
	  </do_task>
	</ilm405>

	<mcl>
	  <ao_task>
	    <source type="string">/Dev2/ao0</source>
	  </ao_task>
	</mcl>

      </configuration>
    </daq> 
    
	<!-- Illumination (lasers, shutters, etc) control GUI. -->
    <illumination>
      <class_name type="string">Illumination</class_name>
      <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
      <configuration>

	<!-- Note: The name of the channel is the gui_name.
	     XML tags cannot start with numbers. -->

	<ch1>
	  <gui_name type="string">647</gui_name>
	  <color type="string">255,0,0</color>
	  <amplitude_modulation>
	    <hw_fn_name>ctech_aotf.ch647</hw_fn_name>
	  </amplitude_modulation>
	  <analog_modulation>
	    <hw_fn_name type="string">daq.ilm647.ao_task</hw_fn_name>
	    <max_voltage type="float">5.0</max_voltage>
	    <min_voltage type="float">0.0</min_voltage>
	  </analog_modulation>
	  <digital_modulation>
	    <hw_fn_name type="string">daq.ilm647.do_task</hw_fn_name>
	  </digital_modulation>
	</ch1>

	<ch2>
	  <gui_name type="string">561</gui_name>
	  <color type="string">0,255,0</color>
	  <amplitude_modulation>
	    <hw_fn_name>ctech_aotf.ch561</hw_fn_name>
	  </amplitude_modulation>
	   <analog_modulation>
	    <hw_fn_name type="string">daq.ilm561.ao_task</hw_fn_name>
	    <max_voltage type="float">5.0</max_voltage>
	    <min_voltage type="float">0.0</min_voltage>
	  </analog_modulation>
	  <digital_modulation>
	    <hw_fn_name type="string">daq.ilm561.do_task</hw_fn_name>
	  </digital_modulation>
	</ch2>

	<ch3>
	  <gui_name type="string">488</gui_name>
	  <color type="string">0,0,255</color>
	  <amplitude_modulation>
	    <hw_fn_name>ctech_aotf.ch488</hw_fn_name>
	  </amplitude_modulation>
	  <analog_modulation>
	    <hw_fn_name type="string">daq.ilm488.ao_task</hw_fn_name>
	    <max_voltage type="float">5.0</max_voltage>
	    <min_voltage type="float">0.0</min_voltage>
	  </analog_modulation>
	  <digital_modulation>
	    <hw_fn_name type="string">daq.ilm488.do_task</hw_fn_name>
	  </digital_modulation>
	</ch3>

	<ch4>
	  <gui_name type="string">405</gui_name>
	  <color type="string">255,0,255</color>
	  <amplitude_modulation>
	    <hw_fn_name>obis405</hw_fn_name>
	  </amplitude_modulation>
	  <analog_modulation>
	    <hw_fn_name type="string">daq.ilm405.ao_task</hw_fn_name>
	    <max_voltage type="float">5.0</max_voltage>
	    <min_voltage type="float">0.0</min_voltage>
	  </analog_modulation>
	  <digital_modulation>
	    <hw_fn_name type="string">daq.ilm405.do_task</hw_fn_name>
	  </digital_modulation>
	</ch4>
      </configuration>
    </illumination>

    <obis405>
      <module_name type="string">storm_control.sc_hardware.coherent.coherentModule</module_name>
      <class_name type="string">CoherentObis</class_name>

      <configuration>
	<port type="string">COM9</port>
	<used_during_filming type="boolean">True</used_during_filming>
      </configuration>
    </obis405>

    <!-- Progression control GUI -->
    <progressions>
      <module_name type="string">storm_control.hal4000.progressions.progressions</module_name>
      <class_name type="string">Progressions</class_name>
      <configuration>
	<illumination_functionality type="string">illumination</illumination_functionality>

	<frames type="int">100</frames>
	<increment type="float">0.01</increment>
	<starting_value type="float">0.1</starting_value>
      </configuration>
    </progressions>

    <!-- sCMOS calibration module -->
    <scmos_cal>
      <module_name type="string">storm_control.hal4000.miscControl.scmosCalibration</module_name>
      <class_name type="string">SCMOSCalibration</class_name>
    </scmos_cal>

	<!-- Focus lock control GUI. -->

    <focuslock>
      <class_name type="string">FocusLock</class_name>
      <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
      <configuration>
	<ir_laser type="string">none_irlaser</ir_laser>
	<ir_power type="int">10</ir_power>
	<lock_modes type="string">NoLockMode,AutoLockMode,AlwaysOnLockMode,HardwareZScanLockMode,OptimalLockMode,CalibrationLockMode,DiagnosticsLockMode</lock_modes>
	<qpd type="string">uc480_camera</qpd>
	<z_stage type="string">mcl_zstage</z_stage>
	<parameters>
	  <find_sum>
	    <step_size type="float">1.0</step_size>
	  </find_sum>
	  <locked>
	    <buffer_length type="int">5</buffer_length>
	    <offset_threshold type="float">20.0</offset_threshold>
	  </locked>
      <jump_size type="float">0.1</jump_size>
	</parameters>
      </configuration>
    </focuslock>

	<!-- Thorlabs UC480 camera for the focus lock -->
    <uc480_camera>
      <class_name type="string">UC480Camera</class_name>
      <module_name type="string">storm_control.sc_hardware.thorlabs.uc480CameraModule</module_name>
      <configuration>
	<parameters>
	  <offset_has_center_bar type="boolean">True</offset_has_center_bar>
	  <offset_maximum type="float">1.0</offset_maximum>
	  <offset_minimum type="float">-1.0</offset_minimum>
	  <offset_warning_high type="float">0.8</offset_warning_high>
	  <offset_warning_low type="float">-0.8</offset_warning_low>
	  <sum_maximum type="float">500000.0</sum_maximum>
	  <sum_minimum type="float">1.0</sum_minimum>
	  <sum_warning_low type="float">10000.0</sum_warning_low>
	</parameters>
	<background type="int">100000</background>
	<camera_id type="int">1</camera_id>
	<ini_file type="string">uc480_settings.ini</ini_file>
    <!--offset file determines where the focus lock ROI start points are-->
	<offset_file type="string">C:/Users/Josh/Aaron/storm-control/storm_control/hal4000/xml/cam_offsets_1.txt</offset_file>
    <!--I believe this determines the exposure time of the camera-->
	<pixel_clock type="int">10</pixel_clock>
    <!--this is the sigma guess for fitting-->
	<sigma type="float">50</sigma>
	<uc480_dll type="string">C:/Windows/System32/uc480_64.dll</uc480_dll>
	<use_storm_analysis type="boolean">False</use_storm_analysis>
    <!-- Single spot fitting AH edit see UC480CameraModule.py and UC480Camera.py -->
    <single_spot type="boolean">True</single_spot>
    <!-- need to change this to True to allow single spot -->
    <allow_single_fits type="boolean">True</allow_single_fits>
    <!-- How many repetitions of the fitting to do for one data point -->
    <reps type="int">5</reps>
    <!-- size of ROI window in focus lock -->
	<x_width type="int">300</x_width>
	<y_width type="int">100</y_width>
    <!-- Feedback constant -->
	<units_to_microns type="float">0.105</units_to_microns>
      </configuration>
    </uc480_camera>

	<!-- Mad City Labs Z piezo -->
    <mcl_zstage>
      <module_name type="string">storm_control.sc_hardware.madCityLabs.mclVoltageZModule</module_name>
      <class_name type="string">MCLVoltageZ</class_name>

      <configuration>
		<parameters>
		  <center type="float">50.0</center>
		  <has_center_bar type="boolean">True</has_center_bar>
		  <maximum type="float">100.0</maximum>
		  <minimum type="float">0.0</minimum>
		  <warning_high type="float">95.0</warning_high>
		  <warning_low type="float">5.0</warning_low>
		</parameters>
		<ao_fn_name type="string">daq.mcl.ao_task</ao_fn_name>
		<microns_to_volts type="float">0.1</microns_to_volts>
      </configuration>
    </mcl_zstage>

	<!-- None IR Laser -->
	<none_irlaser>
      <module_name type="string">storm_control.sc_hardware.none.noneIRLaserModule</module_name>
      <class_name type="string">NoneIRLaserModule</class_name>
    </none_irlaser>

    <!-- ASI stage -->
    <asi_stage>
      <module_name type="string">storm_control.sc_hardware.appliedScientificInstrumentation.ms2000Module</module_name>
      <class_name type="string">ASIStageRS232</class_name>
      <configuration>	
	<com_port type="string">COM3</com_port>
      </configuration>
    </asi_stage>

    <!-- Stage control GUI -->
    <stage>
      <class_name type="string">Stage</class_name>
      <module_name type="string">storm_control.hal4000.stage.stage</module_name>
      <configuration>
	<stage_functionality type="string">asi_stage</stage_functionality>
      </configuration>
    </stage>

    <!-- TCP control -->
    <tcp_control>
      <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
      <class_name type="string">TCPControl</class_name>	    
      <configuration>
	<parallel_mode type="boolean">True</parallel_mode>
	<tcp_port type="int">9000</tcp_port>
      </configuration>
    </tcp_control>

    <!-- Spot counter GUI -->
    <spotcounter>
      <module_name type="string">storm_control.hal4000.spotCounter.spotCounter</module_name>
      <class_name type="string">SpotCounter</class_name>
      <configuration>
	<max_threads type="int">4</max_threads>
	<max_size type="int">263000</max_size>
      </configuration>
    </spotcounter>

  </modules>  

</config>
