<?xml version="1.0" encoding="ISO-8859-1"?>
<hardware>
  <!-- Defines the camera for storm1 -->.

  <!-- The UI mode, this is either "single" (window) or "detached" -->
  <ui_mode type="string">single</ui_mode>

  <!-- Camera control. -->
  <control>
    <module_name type="string">andorCameraControl</module_name>
  </control>

  <!-- Camera display. -->
  <display>
    <module_name type="string">cameraWidgets</module_name>
    <class_name type="string">PyCameraWidget</class_name>
  </display>

  <modules>

    <!-- Feed viewers -->
    <feedviewers>
      <class_name type="string">FeedViewers</class_name>
      <menu_item type="string">New Viewer</menu_item>
      <module_name type="string">display.feedViewer</module_name>
    </feedviewers>

    <!-- The focus lock -->
    <focuslock>
      <class_name type="string">AFocusLockZ</class_name>
      <menu_item type="string">Focus Lock</menu_item>
      <module_name type="string">focuslock.storm1FocusLockZ</module_name>
    </focuslock>

    <!-- Illumination (lasers, shutters, etc) control. -->
    <illumination>
      <class_name type="string">IlluminationControl</class_name>
      <menu_item type="string">Illumination</menu_item>
      <module_name type="string">illumination.illuminationControl</module_name>
      <parameters>
	<settings_xml type="string">storm1_illumination_settings.xml</settings_xml>
      </parameters>
    </illumination>

    <!-- Joystick controller. -->
    <joystick>
      <class_name type="string">AJoystick</class_name>
      <module_name type="string">joystick.gamepad310JoystickControl</module_name>
    </joystick>
  
    <!-- Automatic illumination power adjustment. -->
    <progressions>
      <class_name type="string">ProgressionControl</class_name>
      <menu_item type="string">Progressions</menu_item>
      <module_name type="string">progressionControl</module_name>
    </progressions>

    <!-- The live STORM analysis and display. -->
    <spotcounter>
      <class_name type="string">SingleSpotCounter</class_name>
      <menu_item type="string">Spot Counter</menu_item>
      <module_name type="string">spotCounter</module_name>
    </spotcounter>

    <!-- Motorized XY stage. -->
    <stage>
      <class_name type="string">AStageControl</class_name>
      <menu_item type="string">Stage Control</menu_item>
      <module_name type="string">stagecontrol.storm1StageControl</module_name>
    </stage>

    <!-- Remote control of HAL via TCP/IP. -->
    <tcpip>
      <class_name type="string">HalTCPControl</class_name>
      <module_name type="string">halTcpControl</module_name>
      <parameters>
	<tcp_port type="int">9000</tcp_port>
      </parameters>
    </tcpip>

  </modules>

 </hardware>
