<?xml version="1.0" encoding="ISO-8859-1"?>
<settings>
  <!-- The default HAL settings common to all the setups. -->
  <setup_name type="string" mutable="false">none</setup_name>

  <!-- default film settings -->
  <!-- film settings -->
  <film>
    <acq_mode desc="Acquisition mode" type="string" values="run_till_abort,fixed_length">fixed_length</acq_mode>
    <auto_increment desc="Automatically increment movie counter between movies" type="boolean">True</auto_increment>
    <auto_shutters desc="Run shutters during the movie" type="boolean">True</auto_shutters>
    <directory desc="Current working directory" type="directory">C:\Data\</directory>
    <extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
    <filename desc="Current movie file name" type="string">movie</filename>
    <filetype desc="Movie file type" type="string" values=".dax">.dax</filetype>
    <frames desc="Movie length in frames" type="int" min="1" max="1000000000">10</frames>
    <logfile desc="Image log file" type="filename" mutable="False">C:\Data\image_log.txt</logfile>
    <want_bell desc="Sound bell at the end of long movies" type="boolean">True</want_bell>    
    <want_big_endian desc="Save movies using a big endian format" type="boolean">False</want_big_endian>
  </film>
  
  <!-- default settings for steve -->
  <mosaic>
    <flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">False</flip_horizontal>
    <flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
    <transpose desc="Transpose image (mosaic)" type="boolean">False</transpose>

    <objective desc="Current objective" type="string" values="obj1,obj2,obj3">obj1</objective>
    <obj1 desc="Objective 1" type="custom">100x,0.160,0.0,0.0</obj1>
    <obj2 desc="Objective 2" type="custom">10x,1.60,0.0,0.0</obj2>
    <obj3 desc="Objective 3" type="custom">4x,4.0,0.0,0.0</obj3>
  </mosaic>

</settings>
